% iKChing2010RE: fast Potassium current, Hodgkin-Huxley style, for generic
%   thalamic reticular cells
% Reference: "Ching, S., Cimenser, A., Purdon, P. L., Brown, E. N., & Kopell, N.
%   J. (2010). Thalamocortical model for a propofol-induced alpha-rhythm
%   associated with loss of consciousness. Proceedings of the National Academy of
%   Sciences, 107(52), 22665-22670. doi:10.1073/pnas.1017069108"
% Tags: potassium, current, intrinsic, thalamus
%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%
% Parameters
gK = 20;      % mS/cm^2
EK = -100;    % mV
v_shift = 55; % mV

% Functions
aN(X) = .032.*(15-(X+v_shift))./(exp((15-(X+v_shift))./5)-1)
bN(X) = .5.*exp((10-(X+v_shift))./40)
IKChing2010RE(X,nK) = gK.*nK.^4.*(X-EK)

% ODEs and ICs
nK' = aN(X).*(1-nK)-bN(X).*nK;
nK(0)=.34+.1*rand(1,Npop);

% Linker
@current += -IKChing2010RE(X,nK)
