% iLeakChing2010RE: Leak current, Hodgkin-Huxley-style, for generic thalamic
%   reticular cells
% Reference: "Ching, S., Cimenser, A., Purdon, P. L., Brown, E. N., & Kopell, N.
%   J. (2010). Thalamocortical model for a propofol-induced alpha-rhythm
%   associated with loss of consciousness. Proceedings of the National Academy of
%   Sciences, 107(52), 22665-22670. doi:10.1073/pnas.1017069108"
% Tags: leak, current, intrinsic, thalamus
%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%
% Parameters
gLeak = 0.05; % mS/cm^2
ELeak = -90;  % mV

% Functions
ILeakChing2010RE(X) = gLeak.*(X-ELeak)

% Linker
@current += -ILeakChing2010RE(X)
